run("Duplicate...", "use"); // Probability Map comes with 2 images, this duplicates the map and selects only the image we want to work with
setOption("ScaleConversions", true); // This is helping perform the duplication step from Line 1
run("8-bit"); // This converts the image to an 8-bit image. ImageJ does most of its analysis with 8-bit images
setAutoThreshold("Default dark"); // This is definining the background for our thresholding step
run("Threshold..."); // This is beginning the threshold command

// ***EDIT*** On line below you may change these values to change the threshold to your liking
setThreshold(165, 255); 

setOption("BlackBackground", false); // This is defining the background again
run("Convert to Mask"); // This is creating a mask element
run("Close"); // This is getting rid of an unnecessary Window

// ***EDIT*** On the line below you can set the size of the particles to be looked at, change the numbers after the word "size" or "circularity"
run("Analyze Particles...", "size=35-10000 circularity=0.35-1.00 show=Masks display include overlay add composite");

selectWindow("Mask of chondrocytes"); // This is making sure the correct image is selected for the following steps
// The line below is setting the parameters to use the StarDist Plugin
// StarDist is a machine learning plug-in you need to install yourself
// It will create a map of the chondrocytes which can be applied to a stack of images
run("Command From Macro", "command=[de.csbdresden.stardist.StarDist2D], args=['input':'Mask of chondrocytes', 'modelChoice':'Versatile (fluorescent nuclei)', 'normalizeInput':'true', 'percentileBottom':'0.5', 'percentileTop':'95.7', 'probThresh':'0.25', 'nmsThresh':'0.4', 'outputType':'Both', 'nTiles':'1', 'excludeBoundary':'2', 'roiPosition':'Automatic', 'verbose':'false', 'showCsbdeepProgress':'false', 'showProbAndDist':'false'], process=[false]");
selectWindow("Label Image"); // Making sure the correct image is selected

// ***EDIT*** To set the measurements you would like to be taken at the end result, type then after the word "mean"
run("Set Measurements...", "mean centroid redirect=None decimal=3"); 

// ***EDIT*** In line below replace the information inside the quotation marks with the file pathway for the image stack you are analyzing
open("C:/MEEG467/CartilageData (Control 1) (1).lsm"); 

selectWindow("ROI Manager");
//roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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443));
run("Select All");
roiManager("Multi Measure"); // The final three lines are used to run the measurements and obtain results
